PsychoPy2experiment version="1.83.04"
Settings
  Monitor = testMonitor
  color = $[.4,.4,.4]
  Experiment info = {u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_Arrows_VVA_Color' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Arrows_VVA_Color
  logging level = debug
  Screen = 1
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Routines
  Routine color_sample
    TextComponent text_2
      color = black
      text = These are all RED
      pos = (-.5, .75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      color = black
      text = These are all BLUE.
      pos = (.5,.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        if color_sample_loop.thisN == 0:
            num_im = -1
        img = []
        for i,totalN in enumerate(color_sample_loop.trialList):
            img.append(visual.Rect(win=win,autoDraw=True,width=(0.5,0.5)[0],height=(0.5,0.5)[1],pos=[totalN['x'],totalN['y']],fillColor=totalN['color'],opacity=0))
      End Routine:
        for x in img:
            x.setAutoDraw(False)

        color_sample_loop.finished=True
      Each Frame:
        keys = event.getKeys()

        if keys:
            if 'escape' in keys:
                core.quit()
            elif 'space' in keys and num_im < 5:
                num_im += 1
                img[num_im].opacity=1
            elif 'space' in keys and num_im == 5:
                continueRoutine=False
  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine color_practice
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Experiment:
        import random

        vertexOptions = [3,4,5,6,999]
      Begin Routine:
        if trials_3.thisN == 0:
            lastTrialColor = thisTrial_3.answer
            lastnVertices = []



        tempVerts = vertexOptions[:]

        try:
            tempVerts.remove(lastnVertices)
        except ValueError:
            pass

        nVertices = random.choice(tempVerts)


        poly = visual.Polygon(win=win,autoDraw = True,fillColor=thisTrial_3.color,edges=nVertices)
      End Routine:
        if trials_3.thisN == 0:
            correct = 1
        elif lastTrialColor == thisTrial_3.answer and key_resp_11.keys in ['a']:
            correct = 1
        elif lastTrialColor != thisTrial_3.answer and key_resp_11.keys in ['f']:
            correct = 1
        else:
            correct = 0

        lastTrialColor = thisTrial_3.answer

        lastnVertices = nVertices

        trials_3.addData('colorpractice_correct',correct)
        trials_3.addData('colorpractice_numVertices',nVertices)

        poly.setAutoDraw(False)
    TextComponent text_9
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine color_instructions
    TextComponent text_4
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Your job is to determine whether the color that is currently on the screen is the SAME color as the one that you just saw or a DIFFERENT color.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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  Routine color_trials
    KeyboardComponent color_response
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Routine:
        if trials_2.thisN == 0:
            lastTrialColor = thisTrial_2.answer
            lastnVertices = []



        tempVerts = vertexOptions[:]

        try:
            tempVerts.remove(lastnVertices)
        except ValueError:
            pass

        nVertices = random.choice(tempVerts)


        poly = visual.Polygon(win=win,autoDraw = True,fillColor=thisTrial_2.color,edges=nVertices)
      End Routine:
        if trials_2.thisN == 0:
            correct = 1
        elif lastTrialColor == thisTrial_2.answer and color_response.keys in ['a']:
            correct = 1
        elif lastTrialColor != thisTrial_2.answer and color_response.keys in ['f']:
            correct = 1
        else:
            correct = 0

        lastTrialColor = thisTrial_2.answer

        lastnVertices = nVertices

        trials_2.addData('colorpractice_correct',correct)
        trials_2.addData('colorpractice_numVertices',nVertices)

        poly.setAutoDraw(False)
  Routine color_practice_feedback
    TextComponent text_7
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine color_instructions_3
    TextComponent text_10
      wrapWidth = 1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great! Now for the actual experiment. You have as long as you like - try to get as many correct as you can.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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  Routine color_practice_instructions
    TextComponent text_6
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Begin Routine:
        if repeat_color_practice.thisN == 0:
            text_6.setText("Let's try a few for practice. You'll see colors one at a time on the screen. They will be either BLUE or RED or ORANGE. Tell the experimenter if the color on the screen is the SAME or DIFFERENT from the color that you just saw. For the first trial, just say 'GO.' [Experimenter: Press Green for SAME, Red for DIFFERENT]")
        elif repeat_color_practice.thisN == 1:
            text_6.setText("Ok, before we practice one more time - do you have any questions about the task?")
  Routine color_sample_same
    PolygonComponent polygon_2
      fillColor = #d7191c
      pos = (-.3, 0)
      startVal [time (s)] = 0
      nVertices = 999
      size = (0.5, .5)
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    PolygonComponent polygon_3
      fillColor = #d7191c
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.5, 0.5)
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    TextComponent text_3
      wrapWidth = 1
      color = black
      pos = (0, .6)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These colors are the SAME. So if you saw the color on the left followed by the color on the right, you would say

        "SAME"
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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  Routine color_feedback
    TextComponent text_8
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Routine:
        text_8.setText("You answered %s correct out of %s" % (number_correct,trials_2.nTotal))
  Routine color_sample_diff
    PolygonComponent polygon_4
      fillColor = #fdae61
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      nVertices = 5
      size = (0.5, 0.5)
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    PolygonComponent polygon_5
      fillColor = #2c7bb6
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      nVertices = 5
      size = (0.5, 0.5)
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    TextComponent text_5
      wrapWidth = 1
      color = black
      pos = (0, .6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These colors are DIFFERENT. So if you saw the color on the left followed by the color on the right, you would say

        "DIFFERENT"
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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Flow
  Routine color_instructions
  Routine color_sample_same
  Routine color_sample_diff
  LoopInitiator repeat_color_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine color_practice_instructions
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = Sequences\color_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'color': u'#d7191c', 'answer': u'r'},
        {'color': u'#d7191c', 'answer': u'r'},
        {'color': u'#d7191c', 'answer': u'r'},
        {'color': u'#fdae61', 'answer': u'o'},
        {'color': u'#fdae61', 'answer': u'o'},
        {'color': u'#fdae61', 'answer': u'o'},
        {'color': u'#2c7bb6', 'answer': u'b'},
        {'color': u'#2c7bb6', 'answer': u'b'},
        {'color': u'#2c7bb6', 'answer': u'b'}]
      Routine color_practice
    LoopTerminator trials_3
  LoopTerminator repeat_color_practice
  Routine color_instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Sequences\color.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#d7191c', 'answer': u'r'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'},
      {'color': u'#fdae61', 'answer': u'o'}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
    Routine color_trials
  LoopTerminator trials_2
  Routine end
