PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[.4,.4,.4]
  Experiment info = {u'participant': u'', u'Scr or Whi': u'Whi'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_Arrows_VVA_Direction' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Arrows_VVA_Direction
  logging level = debug
  Screen = 1
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Routines
  Routine spatial_practice_between_formats
    TextComponent text_2
      color = black
      text = Time for a short break.
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Routine:
        practice_format_conditions = practice_formats.pop(0)


        thisCounterbal = str(allFormsCounterbal.pop(0))


        practice_trials = 'practice_order_' + practice_images + '_' + practice_format_conditions + '_' + thisCounterbal + '.xlsx'
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine spatial_image_trials
    ImageComponent image_5
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus
      size = [.67,.67]
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'd'
      startVal [time (s)] = 0.0
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  Routine ISI_2
    TextComponent fixation_2
      color = black
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_9
      Begin Routine:
        if trials_3.thisN % 2 == 0:
            continueRoutine = False
  Routine ISI
    TextComponent fixation_1
      color = black
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_8
      Begin Routine:
        if trials.thisN % 2 == 0:
            continueRoutine = False
  Routine spatial_instructions
    TextComponent text_4
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This task is just like the previous one, except with spatial directions instead of colors. Your job is to determine whether the spatial direction that is currently on the screen is the SAME spatial direction as the one that you just saw or a DIFFERENT spatial direction.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        if expInfo['Scr or Whi'] == 'Scr':
            practice_images = "SCR"
            stimOrder = expInfo['participant'] + 'vva_within_scr_order.csv'
        elif expInfo['Scr or Whi'] == 'Whi':
            practice_images = "WHI"
            stimOrder = expInfo['participant'] + 'vva_within_whi_order.csv'
  Routine spatial_practice_instructions
    TextComponent text_6
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Begin Experiment:
        import random

        form1Counterbal = [1,2]
        form2Counterbal = [1,2]
        form3Counterbal = [1,2]

        random.shuffle(form1Counterbal)
        random.shuffle(form2Counterbal)
        random.shuffle(form3Counterbal)

        allFormsCounterbal = [form1Counterbal[0],form2Counterbal[0],form3Counterbal[0],form1Counterbal[1],form2Counterbal[1],form3Counterbal[1]]
      Begin Routine:
        practice_formats = ['image','schema','word']

        random.shuffle(practice_formats)

        thisCounterbal = str(allFormsCounterbal.pop(0))

        practice_format_conditions = practice_formats.pop(0)
        practice_trials = 'practice_order_' + practice_images + '_' + practice_format_conditions + '_' + thisCounterbal + '.xlsx'

        if repeat_spatial_practice.thisN == 0:
            text_6.setText("Let's try a few for practice. You'll see pairs of images with one image on the screen at a time. Each image will be a spatial direction: LEFT or RIGHT or AHEAD. Tell me if the two images on the screen are the SAME spatial direction, or DIFFERENT spatial directions. For the first image, just say 'GO.' Then when it says 'Same/Different?' underneath, tell me whether you see the same spatial direction or a different spatial direction as the first image.")
        elif repeat_spatial_practice.thisN == 1:
            text_6.setText("Ok, before we practice one more time - do you have any questions about the task?")
  Routine ISI_3
    TextComponent fixation_3
      color = black
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_10
      Begin Routine:
        if trials_4.thisN % 2 == 0:
            continueRoutine = False
  Routine gesture_instructions
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'd'
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      text = First, I will explain a few examples of the types of spatial directions you will see.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine spatial_practice_3
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image_4
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [.67,.67]
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    TextComponent text_same_practice_3
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_7
      Begin Routine:
        if trials_4.thisN % 2 == 1:
            text_same_practice_3.setText("SAME / DIFFERENT?")
        else:
            text_same_practice_3.setText("")
      End Routine:
        if trials_4.thisN == 7:
            trials_4.finished=True
            continueRoutine = False
  Routine spatial_practice_2
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image_3
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [.67,.67]
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    TextComponent text_same_practice_2
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        if trials_3.thisN % 2 == 1:
            text_same_practice_2.setText("SAME / DIFFERENT?")
        else:
            text_same_practice_2.setText("")
  Routine spatial_trials
    KeyboardComponent direction_response
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"21_Stimuli//" + Stimulus
      size = [.67,.67]
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    CodeComponent code_3
      Begin Experiment:
        between_format_text = visual.TextStim(win, color='black',text="Time for a short break.")
      Begin Routine:
        if trials_2.thisN % 2 == 1:
            text_same.setText("SAME / DIFFERENT?")
        else:
            text_same.setText("")

        if trials_3.thisN == 0:
            lastTriaDirection = thisTrial_3.direction
      End Routine:
        if trials_2 > 0 and (trials_2.thisN +1) % 20 == 0:
            between_format_text.draw()
            win.flip()
            event.clearEvents()
            event.waitKeys(keyList=['d'])

        if trials_2.thisN == 0:
            correct = 1
        elif lastTrialDirection == thisTrial_2.direction and direction_response.keys in ['a']:
            correct = 1
        elif lastTrialDirection != thisTrial_2.direction and direction_response.keys in ['f']:
            correct = 1
        else:
            correct = 0

        lastTrialDirection = thisTrial_2.direction

        if trials_2.thisN % 2 == 1:
            trials_2.addData('spatialdirection_correct',correct)
    TextComponent text_same
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine spatial_practice
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [.67,.67]
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    TextComponent text_same_practice
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Routine:
        if trials.thisN % 2 == 1:
            text_same_practice.setText("SAME / DIFFERENT?")
        else:
            text_same_practice.setText("")
  Routine spatial_instructions_3
    TextComponent text_10
      wrapWidth = 1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great! Now for the actual experiment. You have as long as you like - try to get as many correct as you can.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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  Routine ISI_4
    TextComponent fixation_4
      color = black
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_11
      Begin Routine:
        if trials_2.thisN % 2 == 0:
            continueRoutine = False
Flow
  Routine spatial_instructions
  Routine gesture_instructions
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = Extra_Stimuli\gesture_practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimulus': u'right_schema_1_WHI.jpg', 'direction': u'right', 'number': 1, 'format': u'schema'},
      {'Stimulus': u'right_schema_2_WHI.jpg', 'direction': u'right', 'number': 2, 'format': u'schema'},
      {'Stimulus': u'ahead_schema_1_WHI.jpg', 'direction': u'ahead', 'number': 1, 'format': u'schema'},
      {'Stimulus': u'ahead_schema_2_WHI.jpg', 'direction': u'ahead', 'number': 2, 'format': u'schema'},
      {'Stimulus': u'left_schema_1_WHI.jpg', 'direction': u'left', 'number': 1, 'format': u'schema'},
      {'Stimulus': u'left_schema_2_WHI.jpg', 'direction': u'left', 'number': 2, 'format': u'schema'},
      {'Stimulus': u'right_word_1_WHI.jpg', 'direction': u'right', 'number': 1, 'format': u'word'},
      {'Stimulus': u'right_word_2_WHI.jpg', 'direction': u'right', 'number': 2, 'format': u'word'},
      {'Stimulus': u'ahead_word_1_WHI.jpg', 'direction': u'ahead', 'number': 1, 'format': u'word'},
      {'Stimulus': u'ahead_word_2_WHI.jpg', 'direction': u'ahead', 'number': 2, 'format': u'word'},
      {'Stimulus': u'left_word_1_WHI.jpg', 'direction': u'left', 'number': 1, 'format': u'word'},
      {'Stimulus': u'left_word_2_WHI.jpg', 'direction': u'left', 'number': 2, 'format': u'word'},
      {'Stimulus': u'right_image_1_WHI.jpg', 'direction': u'right', 'number': 1, 'format': u'image'},
      {'Stimulus': u'right_image_2_WHI.jpg', 'direction': u'right', 'number': 2, 'format': u'image'},
      {'Stimulus': u'ahead_image_1_WHI.jpg', 'direction': u'ahead', 'number': 1, 'format': u'image'},
      {'Stimulus': u'ahead_image_2_WHI.jpg', 'direction': u'ahead', 'number': 2, 'format': u'image'}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
    Routine spatial_image_trials
  LoopTerminator trials_5
  LoopInitiator repeat_spatial_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine spatial_practice_instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = sequential
      nReps = 1
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      Routine spatial_practice
      Routine ISI
    LoopTerminator trials
    Routine spatial_practice_between_formats
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = sequential
      nReps = 1
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      Routine spatial_practice_2
      Routine ISI_2
    LoopTerminator trials_3
    Routine spatial_practice_between_formats
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = sequential
      nReps = 1
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      Routine spatial_practice_3
      Routine ISI_3
    LoopTerminator trials_4
  LoopTerminator repeat_spatial_practice
  Routine spatial_instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"Sequences//"+ stimOrder
    loopType = sequential
    nReps = 1
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    Routine spatial_trials
    Routine ISI_4
  LoopTerminator trials_2
  Routine end
