PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[.4,.4,.4]
  Experiment info = {u'J is Correct': u'', u'participant': u'', u'Scr or Whi': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_Arrows_VVA' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Arrows_VVA
  logging level = debug
  Screen = 1
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Routines
  Routine Last_Instruction_Reminder
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        'OK - That was the end of the practice. \n\n'

        'Do you have any questions? \n\n'

        'Remember, press ' + $key + ' for same as previous, '+ $other_key + ' for different from previous!\n\n'

        '[Press space to begin and ' + $key + ' for this next slide]'
  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine direction_trial
    ImageComponent image
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $"21_stimuli\\"+Stimulus
      size = [1600/win.size[0],1600/win.size[1]]
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    KeyboardComponent key_resp_2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'f','j'
      startVal [time (s)] = 0.0
      store = first key
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  Routine color_instructions
    CodeComponent beg_exp_code
      Begin Experiment:
        if expInfo['J is Correct'] == 'F':
            instructions = 'Instructions_F.xlsx'
            key = 'F'
            other_key = 'J'
        elif expInfo['J is Correct'] == 'J':
            instructions = 'Instructions_J.xlsx'
            key = 'J'
            other_key = 'F'
        if expInfo['Scr or Whi'] == 'Scr':
            practice_images = "practice_order_SCR.xlsx"
            background = 'SCR'
            stimOrder = 'vva_within_scr_order' + '.csv'
        elif expInfo['Scr or Whi'] == 'Whi':
            practice_images = "practice_order_WHI.xlsx"
            background = 'WHI'
            stimOrder = 'vva_within_whi_order' + '.csv'
    TextComponent text_4
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Your job is to determine whether the color that is currently on the screen is the SAME color as the one that you just saw or a DIFFERENT color.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine color_trials
    PolygonComponent polygon
      fillColor [set every repeat] = $color
      startVal [time (s)] = 0.0
      size = (1,1)
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    KeyboardComponent color_response
      forceEndRoutine = True
      allowedKeys = 'j','f'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Routine:
        if trials_2.thisN == 0:
            number_correct = 0
            lastTrialColor = thisTrial_2.answer
      End Routine:
        if lastTrialColor == thisTrial_2.answer and color_response.keys in ['j']:
            number_correct += 1
            correct = 1
        elif lastTrialColor != thisTrial_2.answer and color_response.keys in ['f']:
            number_correct += 1
            correct = 1
        else:
            correct = 0

        lastTrialColor = thisTrial_2.answer

        trials_2.addData('color_correct',correct)
  Routine color_practice_feedback
    TextComponent text_7
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine color_instructions_3
    TextComponent text_10
      wrapWidth = 1
      color = black
      text = Great! Now complete this next batch of trials. You have as long as you like - try to get as many correct as you can.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine color_practice_instructions
    TextComponent text_6
      wrapWidth = 1.5
      color = black
      text = Let's try a few for practice. You'll see colors one at a time on the screen. They will be either BLUE OR RED. Tell the experimenter if the color on the screen is the SAME or DIFFERENT from the color that you just saw.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine direction_practice
    ImageComponent image_3
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [1600/win.size[0],1600/win.size[1]]
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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  Routine color_sample_same
    PolygonComponent polygon_2
      fillColor = red
      pos = (-.3, 0)
      startVal [time (s)] = 0
      size = (0.5, .5)
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    PolygonComponent polygon_3
      fillColor = darkred
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent text_3
      wrapWidth = 1
      color = black
      pos = (0, .6)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These colors are both RED. So if you saw the color on the left followed by the color on the right, you would say

        "SAME"
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine direction_instructions
    ImageComponent image_2
      startVal [time (s)] = 0.0
      image [set every repeat] = $"instructions//" + Order
      size = [2, 2]
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'j'
      startVal [time (s)] = 0.0
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  Routine color_feedback
    TextComponent text_8
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Routine:
        text_8.setText("You answered %s correct out of %s" % (number_correct,trials_2.nTotal))
  Routine color_sample_diff
    PolygonComponent polygon_4
      fillColor = darkgreen
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent polygon_5
      fillColor = lightblue
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent text_5
      wrapWidth = 1
      color = black
      pos = (0, .6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These colors are DIFFERENT. So if you saw the color on the left followed by the color on the right, you would say

        "DIFFERENT"
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine color_practice
    PolygonComponent polygon_7
      fillColor [set every repeat] = $color
      startVal [time (s)] = 0.0
      size = (1,1)
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'j','f'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Routine:
        if trials_3.thisN == 0:
            lastTrialColor = thisTrial_3.answer
            num_correct = 0
      End Routine:
        if trials_3.thisN == 0:
            correct = 'correct'
            num_correct += 1
        elif lastTrialColor == thisTrial_3.answer and key_resp_11.keys in ['j']:
            correct = 'correct'
            num_correct += 1
        elif lastTrialColor != thisTrial_3.answer and key_resp_11.keys in ['f']:
            correct = 'correct'
            num_correct += 1
        else:
            correct = 'incorrect'

        lastTrialColor = thisTrial_3.answer

        text_9.setText("%s" % (correct))



        if trials_3.thisN + 1 == trials_3.nTotal:
            if num_correct >= 4:
                repeat_color_practice.finished = True
    TextComponent text_9
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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Flow
  Routine color_instructions
  Routine color_sample_same
  Routine color_sample_diff
  LoopInitiator repeat_color_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    Routine color_practice_instructions
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = color_practice.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'color': u'red', 'answer': u'r'},
        {'color': u'blue', 'answer': u'b'},
        {'color': u'red', 'answer': u'r'},
        {'color': u'red', 'answer': u'r'},
        {'color': u'blue', 'answer': u'b'}]
      Routine color_practice
    LoopTerminator trials_3
  LoopTerminator repeat_color_practice
  Routine color_instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = color.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'color': u'red', 'answer': u'r'},
      {'color': u'blue', 'answer': u'b'},
      {'color': u'green', 'answer': u'g'},
      {'color': u'darkblue', 'answer': u'b'},
      {'color': u'darkgreen', 'answer': u'g'},
      {'color': u'darkred', 'answer': u'r'},
      {'color': u'lime', 'answer': u'g'},
      {'color': u'firebrick', 'answer': u'r'},
      {'color': u'royalblue', 'answer': u'b'}]
    Routine color_trials
  LoopTerminator trials_2
  LoopInitiator practice_2 loopType="TrialHandler"
    conditionsFile = $"Extra_Stimuli//"+ practice_images
    loopType = random
    nReps = 1
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    Routine direction_practice
  LoopTerminator practice_2
  Routine Last_Instruction_Reminder
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"Sequences//"+ stimOrder
    loopType = sequential
    nReps = 1
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    Routine direction_trial
  LoopTerminator trials
  Routine end
